PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.5000, 0.5000, 0.5000
  expName = flanker-basic_v2
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Face Game

        Welcome to the face game. In this game, faces will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE face, and to respond as quickly as you can without making mistakes.

        If the MIDDLE face is pointing to the right, use your right hand to press the right button. If the MIDDLE face is pointing to the left, use your left hand to press the left button.

        Press the right button to continue
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent task_isi_code
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task_stim_keyResp.keys and len(task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task_stim_keyResp.keys) < 2: #if this is  the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task_stim_keyResp.keys: #if at least one response was made this trial
            if task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Both
      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_fixImg
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      saveStartStop = False
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 5: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x05]) #hexcode = 5; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 6:
                stimTriggerSent = True
                port.write([0x06])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 7:
                stimTriggerSent = True
                port.write([0x07])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 8:
                stimTriggerSent = True
                port.write([0x08])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent prac_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the faces. Remember to always respond to the direction of the MIDDLE face.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounter = 0

        #note that we do not need to initialize the accuracy and numCorr vars here
        #because they were already initialilzed in the code snippet of the practice loop
      Begin Routine:
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 12'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 12'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 12'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 12'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 12'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 12'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 12'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 12'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 12'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 12'
        elif blockCounter == 11:
            blockNumText = 'Block 11 of 12'
        elif blockCounter == 12:
            blockNumText = 'Block 12 of 12'
    TextComponent task_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to always respond to the direction of the MIDDLE face.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockFeed
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You have completed the practice' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the right key
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation
    ImageComponent initFixation_img
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE face is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructRight_centerImg
      image = img/renders/face000_45.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/renders/face000_45.png
      pos = (.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/renders/face000_45.png
      pos = (-.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE face will point in a different direction from the other faces. However, your goal is to always respond based on the direction of the MIDDLE face.

        Below, the MIDDLE face is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructIncon_centerImg
      image = img/renders/face000_45.png
      pos = (0.058, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/renders/face000_-45.png
      pos = (.14, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/renders/face000_-45.png
      pos = (-.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE face is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructLeft_centerImg
      image = img/renders/face000_-45.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/renders/face000_-45.png
      pos = (.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/renders/face000_-45.png
      pos = (-.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE face is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructInconLeft_centerImg
      image = img/renders/face000_-45.png
      pos = (-0.058, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/renders/face000_45.png
      pos = (.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/renders/face000_45.png
      pos = (-.13, -.3)
      saveStartStop = False
      size = (.18, .18)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)

        win.mouseVisible = False #hide mouse cursor
        port = serial.Serial('COM3') #open specified port (COM3) for sending eeg triggers to
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
  Routine instructMainTask_2
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine surpriseTask
    ImageComponent stimulus
      image [set every repeat] = $surpriseFaces
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructsurpA1_right
      letterHeight = 0.025
      pos [set every repeat] = (0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA1
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    TextComponent instructsurpA2_left
      letterHeight = 0.025
      pos = (-0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA2
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    KeyboardComponent surprise_key_resp
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine surpriseInstruct_2
  Routine instructSurpriseTask2
    TextComponent instructMainTask_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine surpriseInstruct
    TextComponent instruct_surprise1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a game in which you will be asked if the displayed face on the screen looks OLD or NEW to you.


        For example, if you think that you have seen a displayed face in the previous game, please select OLD as your response.

        Press right key to proceed.
    KeyboardComponent instruct_surp1_key_resp
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine counterbalance1
    TextComponent cb_text1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please select the order at which you want to perform this experiment.

        To perform the arrow flanker first, press the right key, but If you want to do the face flanker first, press the left key.
    KeyboardComponent key_resp_counterbalance1
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent counterbalance1_code
      Code Type = Auto->JS
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      End Routine:
        if key_resp_counterbalance1.keys[-1] == '8': # Running the arrow flanker task was chosen to be done first.
             firstLoop = 'alt_arrow_blockSelect.xlsx'
             secondLoop = 'alt_face_blockSelect.xlsx'
        elif key_resp_counterbalance1.keys[-1] == '1': # Running the face flanker task was chosen to be done first.
             firstLoop = 'alt_face_blockSelect.xlsx'
             secondLoop = 'alt_arrow_blockSelect.xlsx'
  Routine face_block_exp
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Second Loop

        including line breaks
  Routine arrow_block_exp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        First Loop
        including line breaks
  Routine code
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if not arrow_block_loop.started and not face_block_loop.started:
            if key_resp_counterbalance1.keys[-1] == '8':
                get csv for 8 key
                save csv path as variable

            elif key_resp_counterbalance1.keys[-1] == '1':
                face_block_loop.started = True
  Routine firstTask_instruct
    CodeComponent firstT_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounter = 0

        #note that we do not need to initialize the accuracy and numCorr vars here
        #because they were already initialilzed in the code snippet of the practice loop
      Begin Routine:
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 6'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 6'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 6'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 6'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 6'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 6'
    TextComponent firstT_text1
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent firstT_text2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to always respond to the direction of the MIDDLE image.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent firstT_key
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine firstT_feed
    CodeComponent fisrtT_feed_code1
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        firstTrial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent fTfeed_text1_1
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent fTFeed_text2_1
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button
      wrapWidth = 1.3
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    KeyboardComponent fTfeed_key_1
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine secondT_feed
    CodeComponent secondT_feed_code1
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        secondTrial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent sTfeed_text1
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent scFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button
      wrapWidth = 1.3
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    KeyboardComponent sTfeed_key
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine secondT
    CodeComponent task_isi_code_2
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        secondTrial_loop.addData('ISI', thisISI)
    ImageComponent bigFace
      image [set every repeat] = $straightFace
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background_2
      image = img/cover_background.png
      size = (0.65, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent task_centerImg_2
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1_2
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_leftImg1_2
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_fixImg_2
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent task_stimTrigger_code_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg_2.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent second_task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if second_task_stim_keyResp.keys and len(second_task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(second_task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(second_task_stim_keyResp.keys) < 2: #if this is  the first response
                if second_task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif second_task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(second_task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if second_task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif second_task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
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    CodeComponent task_accuracy_code_2
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if second_task_stim_keyResp.keys: #if at least one response was made this trial
            if second_task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif second_task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        secondTrial_loop.addData('accuracy', accuracy)
  Routine firstT
    CodeComponent task_isi_code_3
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1500, 2000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        firstTrial_loop.addData('ISI', thisISI)
    ImageComponent bigFace_2
      image [set every repeat] = $straightFace
      pos = (0, 0.0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background
      image = img/cover_background.png
      size = (0.65, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent task_centerImg_3
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1_3
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_leftImg1_3
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_fixImg_3
      image [set every repeat] = img/fixationCross.png
      pos = (0, -.05)
      size = (.015, .015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent task_stimTrigger_code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg_3.status == STARTED and not stimTriggerSent:
            if stimNum == 1: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x01]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 2:
                stimTriggerSent = True
                port.write([0x02])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 3:
                stimTriggerSent = True
                port.write([0x03])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 4:
                stimTriggerSent = True
                port.write([0x04])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent first_task_stim_keyResp
      allowedKeys [set every repeat] = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if first_task_stim_keyResp.keys and len(first_task_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(first_task_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(first_task_stim_keyResp.keys) < 2: #if this is  the first response
                if first_task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif first_task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(first_task_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if first_task_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif first_task_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
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    CodeComponent task_accuracy_code_3
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if first_task_stim_keyResp.keys: #if at least one response was made this trial
            if first_task_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif first_task_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        firstTrial_loop.addData('accuracy', accuracy)
  Routine surpriseTask_2
    ImageComponent stimulus_2
      image [set every repeat] = $surpriseFaces
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructsurpA1_right_2
      letterHeight = 0.025
      pos [set every repeat] = (0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA1
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    TextComponent instructsurpA2_left_2
      letterHeight = 0.025
      pos = (-0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA2
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    KeyboardComponent surprise_key_resp_2
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructSurpriseTask2_2
    TextComponent instructMainTask_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp_2
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine counterbalance2
    TextComponent cb_text1_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do not Proceed!
        Please let the experimenter choose the way you need to play the upcoming game.


        For the experimenter:
        Press the right key, the game in which the OLD faces correspond to the right key be the first.

        Press the left key, the game in which the OLD faces correspond to the left key be the first.
    KeyboardComponent key_resp_counterbalance1_2
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent counterbalance1_code_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp_counterbalance1.keys[-1] == '8':
             first_surpriseLoop = 'surpriseBlock_select1.xlsx'
             second_surpriseLoop = 'surpriseBlock_select2.xlsx'
        elif key_resp_counterbalance1.keys[-1] == '1':
             first_surpriseLoop = 'surpriseBlock_select2.xlsx'
             second_surpriseLoop = 'surpriseBlock_select1.xlsx'
Flow
  Routine JS_code
  Routine setup
  Routine welcome
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  LoopInitiator prac_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect_practice.csv
    loopType = random
    nReps = 999
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    Routine prac_blockReminders
    Routine initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  Routine counterbalance1
  LoopInitiator first_block_loop loopType="TrialHandler"
    conditionsFile = $firstLoop
    loopType = random
    nReps = 1
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    Routine firstTask_instruct
    Routine initFixation
    LoopInitiator firstTrial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine firstT
    LoopTerminator firstTrial_loop
    Routine firstT_feed
  LoopTerminator first_block_loop
  LoopInitiator second_block_loop loopType="TrialHandler"
    conditionsFile = $secondLoop
    loopType = random
    nReps = 1
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    Routine firstTask_instruct
    Routine initFixation
    LoopInitiator secondTrial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine secondT
    LoopTerminator secondTrial_loop
    Routine secondT_feed
  LoopTerminator second_block_loop
  Routine surpriseInstruct
  Routine counterbalance2
  LoopInitiator surprise_block_loop loopType="TrialHandler"
    conditionsFile = $first_surpriseLoop
    loopType = random
    nReps = 1
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    Routine instructSurpriseTask2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichSurpriseBlock
      loopType = random
      nReps = 1
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      Routine surpriseTask
    LoopTerminator trials
  LoopTerminator surprise_block_loop
  LoopInitiator surprise_block_loop2 loopType="TrialHandler"
    conditionsFile = $second_surpriseLoop
    loopType = random
    nReps = 1
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    Routine instructSurpriseTask2_2
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $whichSurpriseBlock
      loopType = random
      nReps = 1
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      Routine surpriseTask_2
    LoopTerminator trials_2
  LoopTerminator surprise_block_loop2
  Routine finishMessage
