PsychoPy2experiment version="2022.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'cb': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.5000, 0.5000, 0.5000
  expName = mfe_flanker_v1
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Arrow Game

        Welcome to the arrow game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the right button. If the MIDDLE arrow is pointing to the left, use your left hand to press the left button.

        Press the right button to continue
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent task_isi_code
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent bigFace_2
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0, 0.0)
      size = (0.4267, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background
      image = img/cover_background.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
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    ImageComponent task_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
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    ImageComponent task_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent task_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent task_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if task_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 5: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x05]) #hexcode = 1; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 6:
                stimTriggerSent = True
                port.write([0x06])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 7:
                stimTriggerSent = True
                port.write([0x07])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 8:
                stimTriggerSent = True
                port.write([0x08])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent task1_stim_keyResp
      allowedKeys = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if task1_stim_keyResp.keys and len(task1_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(task1_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(task1_stim_keyResp.keys) < 2: #if this is  the first response
                if task1_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task1_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(task1_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if task1_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif task1_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task1_stim_keyResp.keys: #if at least one response was made this trial
            if task1_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task1_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Both
      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent bigFace
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0, 0.0)
      size = (0.4267, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background_2
      image [set every repeat] = img/cover_background.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      saveStartStop = False
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    CodeComponent prac_stimTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimTriggerSent = False
      Each Frame:
        #the first if statement below ensures that the subsequent if statements (and throwing of triggers)
        #only occurs once per trial. That is, only when the stimulus is presented (.status = STARTED) and
        #stimTriggerSent is still False. Once a trigger is sent, we change stimTriggerSent to True so that
        #the stimulus eeg trigger will not be sent again for this trial
        if prac_centerImg.status == STARTED and not stimTriggerSent:
            if stimNum == 5: #code denoting which stimulus array was sent (from excel file)
                stimTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
                port.write([0x05]) #hexcode = 5; eeg trigger sent
                time.sleep(PulseWidth) #how long to wait before clearing trigger port
                port.write([0x00]) #clear trigger port by sending hexcode = 0
            elif stimNum == 6:
                stimTriggerSent = True
                port.write([0x06])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 7:
                stimTriggerSent = True
                port.write([0x07])
                time.sleep(PulseWidth)
                port.write([0x00])
            elif stimNum == 8:
                stimTriggerSent = True
                port.write([0x08])
                time.sleep(PulseWidth)
                port.write([0x00])
    KeyboardComponent prac_stim_keyResp
      allowedKeys = '1','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_respTrigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if prac_stim_keyResp.keys and len(prac_stim_keyResp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(prac_stim_keyResp.keys[-1]) #add this response to list of keys pressed this trial
            if len(prac_stim_keyResp.keys) < 2: #if this is  the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #correct response
                        port.write([0x0B]) # 11
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #error response
                        port.write([0x0C])# 12
                        time.sleep(PulseWidth)
                        port.write([0x00])
            elif len(prac_stim_keyResp.keys) >= 2: #if this is NOT the first response
                if prac_stim_keyResp.keys[-1] == '1':
                    if target == 'left': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'right': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
                elif prac_stim_keyResp.keys[-1] == '8':
                    if target == 'right': #technically correct response, but not the first response made
                        port.write([0x15]) # 21
                        time.sleep(PulseWidth)
                        port.write([0x00])
                    elif target == 'left': #technically error response, but not the first response made
                        port.write([0x16])# 22
                        time.sleep(PulseWidth)
                        port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the arrows. Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounter = 0

        #note that we do not need to initialize the accuracy and numCorr vars here
        #because they were already initialilzed in the code snippet of the practice loop
      Begin Routine:
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 5'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 5'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 5'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 5'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 5'
    TextComponent task_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the right and left buttons, then press the right button when you are ready to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockFeed
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the right button
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You have completed the practice' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the right key
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation
    ImageComponent initFixation_img
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructRight_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond based on the direction of the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the right button with your right hand.

        Press the right button to continue
    ImageComponent instructIncon_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the left button with your left hand.

        Press the left button to continue
    ImageComponent instructInconLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import serial #used for sending eeg triggers
        import time #indirerctly used for sending eeg triggers (how long to wait before clearing port)


        win.mouseVisible = False #hide mouse cursor
        port = serial.Serial('COM3') #open specified port (COM3) for sending eeg triggers to
        PulseWidth = 0.002 #how long to wait before clearing port after sending trigger (2 ms is sufficient at 1000 hz sampling rate)

        port.write([0x00]) #clear serial port
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
        port.write([0xFF]) #set port values back to default state (FF)
        time.sleep(PulseWidth) #wait PulseWidth amount of time before doing anything else
        port.close() #close port opened at start of exp
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
  Routine surpriseInstruct
    TextComponent instruct_surprise1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a game in which you will be asked if the displayed face on the screen looks OLD or NEW to you.


        For example, if you think that you have seen a displayed face in the previous game, please select OLD as your response.

        Press right key to proceed.
    KeyboardComponent instruct_surp1_key_resp
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructSurpriseTask2_2
    TextComponent instructMainTask_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorNumbers_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent errorNumbers_text_2
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        How many errors do you think you made in this game?

        To answer the question:
        Please call the experimenter.
    TextboxComponent textbox_2
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent errorN_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation1
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
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
  Routine botherRate
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent botherRate_text
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        How much did it bother you when you made an error during the arrow game?

        To answer this question:
        Please call the experimenter and let them know your answer on a scale from 0 (not at all) to 10 (very much).
    TextboxComponent textbox_3
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent botherRate_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine firstStim_A1
    ImageComponent first_surpStimuliA1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimA1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = New or Old?
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    CodeComponent stimulus_trig_code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliA1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderA1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely new", "Probably new", "Maybe new", "Maybe old", "Probably old", "Definitely old"]
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderA1.response and len(firstStim_sliderA1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderA1.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderA1.response) < 2: #if this is  the first response
                if firstStim_sliderA1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseA1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'A':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'A':
            continueRoutine = False

        first_mouseA1.setPos([0,0])
  Routine firstStim_A2
    ImageComponent first_surpStimuliA2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimA2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Old or New?
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    CodeComponent stimulus_trig_code_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliA2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderA2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely old", "Probably old", "Maybe old", "Maybe new", "Probably new", "Definitely new"]
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderA2.response and len(firstStim_sliderA2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderA2.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderA2.response) < 2: #if this is  the first response
                if firstStim_sliderA2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderA2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseA2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'A':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'A':
            continueRoutine = False

        first_mouseA2.setPos([0,0])
  Routine secondStim_A2
    ImageComponent second_surpStimuliA2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimA2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Approving or Disapproving?
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    CodeComponent stimulus_trig_code_8
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliA2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderA2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely approving", "Probably approving", "Maybe approving", "Maybe disapproving", "Probably disapproving", "Definitely disapproving"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_8
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderA2.response and len(secondStim_sliderA2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderA2.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderA2.response) < 2: #if this is  the first response
                if secondStim_sliderA2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseA2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'A':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'A':
            continueRoutine = False

        sec_mouseA2.setPos([0,0])
  Routine firstStim_B1
    ImageComponent first_surpStimuliB1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimB1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Old or New?
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    CodeComponent stimulus_trig_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliB1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderB1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely old", "Probably old", "Maybe old", "Maybe new", "Probably new", "Definitely new"]  
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderB1.response and len(firstStim_sliderB1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderB1.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderB1.response) < 2: #if this is  the first response
                if firstStim_sliderB1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseB1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'B':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'B':
            continueRoutine = False

        first_mouseB1.setPos([0,0])
  Routine firstStim_B2
    ImageComponent first_surpStimuliB2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimB2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = New or Old?
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    CodeComponent stimulus_trig_code_9
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliB2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderB2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely new", "Probably new", "Maybe new", "Maybe old", "Probably old", "Definitely old"]
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_9
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderB2.response and len(firstStim_sliderB2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderB2.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderB2.response) < 2: #if this is  the first response
                if firstStim_sliderB2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderB2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseB2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'B':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'B':
            continueRoutine = False

        first_mouseB2.setPos([0,0])
  Routine secondStim_B1
    ImageComponent second_surpStimuliB1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimB1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Disapproving or Approving?
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    CodeComponent stimulus_trig_code_10
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliB1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderB1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely disapproving", "Probably disapproving", "Maybe disapproving", "Maybe approving", "Probably approving", "Definitely approving"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_10
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderB1.response and len(secondStim_sliderB1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderB1.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderB1.response) < 2: #if this is  the first response
                if secondStim_sliderB1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseB1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'B':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'B':
            continueRoutine = False

        sec_mouseB1.setPos([0,0])
  Routine secondStim_A1
    ImageComponent second_surpStimuliA1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimA1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Approving or Disapproving?
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    CodeComponent stimulus_trig_code_7
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliA1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderA1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely approving", "Probably approving", "Maybe approving", "Maybe disapproving", "Probably disapproving", "Definitely disapproving"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_7
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderA1.response and len(secondStim_sliderA1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderA1.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderA1.response) < 2: #if this is  the first response
                if secondStim_sliderA1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderA1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseA1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'A':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'A':
            continueRoutine = False

        sec_mouseA1.setPos([0,0])
  Routine secondStimB2
    ImageComponent second_surpStimuliB2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimB2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Disapproving or Approving?
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    CodeComponent stimulus_trig_code_11
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliB2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderB2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely disapproving", "Probably disapproving", "Maybe disapproving", "Maybe approving", "Probably approving", "Definitely approving"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_11
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderB2.response and len(secondStim_sliderB2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderB2.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderB2.response) < 2: #if this is  the first response
                if secondStim_sliderB2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderB2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseB2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'B':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'B':
            continueRoutine = False

        sec_mouseB2.setPos([0,0])
  Routine firstStim_C1
    ImageComponent first_surpStimuliC1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimC1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Disapproving or Approving?
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    CodeComponent stimulus_trig_code_4
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliC1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderC1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely disapproving", "Probably disapproving", "Maybe disapproving", "Maybe approving", "Probably approving", "Definitely approving"]
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_4
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderC1.response and len(firstStim_sliderC1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderC1.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderC1.response) < 2: #if this is  the first response
                if firstStim_sliderC1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseC1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'C':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'C':
            continueRoutine = False

        first_mouseC1.setPos([0,0])
  Routine firstStim_D1
    ImageComponent first_surpStimuliD1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStim_D1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Approving or Disapproving?
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    CodeComponent stimulus_trig_code_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliD1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderD1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely approving", "Probably approving", "Maybe approving", "Maybe disapproving", "Probably disapproving", "Definitely disapproving"]  
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderD1.response and len(firstStim_sliderD1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderD1.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderD1.response) < 2: #if this is  the first response
                if firstStim_sliderD1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseD1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'D':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'D':
            continueRoutine = False

        first_mouseD1.setPos([0,0])
  Routine secondStim_C1
    ImageComponent second_surpStimuliC1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimC1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = New or Old?
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    CodeComponent stimulus_trig_code_12
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliC1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderC1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely new", "Probably new", "Maybe new", "Maybe old", "Probably old", "Definitely old"]
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_12
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderC1.response and len(secondStim_sliderC1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderC1.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderC1.response) < 2: #if this is  the first response
                if secondStim_sliderC1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseC1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'C':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'C':
            continueRoutine = False

        sec_mouseC1.setPos([0,0])
  Routine firstStim_C2
    ImageComponent first_surpStimuliC2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimC2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Approving or Disapproving?
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    CodeComponent stimulus_trig_code_13
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliC2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderC2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely approving", "Probably approving", "Maybe approving", "Maybe disapproving", "Probably disapproving", "Definitely disapproving"]  
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_13
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderC2.response and len(firstStim_sliderC2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderC2.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderC2.response) < 2: #if this is  the first response
                if firstStim_sliderC2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderC2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseC2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'C':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'C':
            continueRoutine = False

        first_mouseC2.setPos([0,0])
  Routine secondStim_C2
    ImageComponent second_surpStimuliC2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimC2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = New or Old?
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    CodeComponent stimulus_trig_code_14
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliC2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderC2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely new", "Probably new", "Maybe new", "Maybe old", "Probably old", "Definitely old"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_14
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderC2.response and len(secondStim_sliderC2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderC2.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderC2.response) < 2: #if this is  the first response
                if secondStim_sliderC2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderC2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseC2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'C':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'C':
            continueRoutine = False

        sec_mouseC2.setPos([0,0])
  Routine fixation2
    TextComponent fix_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine secondStim_D1
    ImageComponent second_surpStimuliD1
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimD1
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Old or New?
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    CodeComponent stimulus_trig_code_15
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliD1.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderD1
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely old", "Probably old", "Maybe old", "Maybe new", "Probably new", "Definitely new"]
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_15
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderD1.response and len(secondStim_sliderD1.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderD1.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderD1.response) < 2: #if this is  the first response
                if secondStim_sliderD1.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD1.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD1.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD1.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD1.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD1.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseD1
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'D':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = True
            elif surprise_block_loop.thisN == 1:
                continueRoutine = False
        elif expInfo['cb'] != 'D':
            continueRoutine = False

        sec_mouseD1.setPos([0,0])
  Routine firstStim_D2
    ImageComponent first_surpStimuliD2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent fStimD2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = Disapproving or Approving?
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    CodeComponent stimulus_trig_code_16
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if first_surpStimuliD2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent firstStim_sliderD2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely disapproving", "Probably disapproving", "Maybe disapproving", "Maybe approving", "Probably approving", "Definitely approving"]  
      letterHeight = 0.022
      pos = (0, 0.3)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_16
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if firstStim_sliderD2.response and len(firstStim_sliderD2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(firstStim_sliderD2.response[-1]) #add this response to list of keys pressed this trial
            if len(firstStim_sliderD2.response) < 2: #if this is  the first response
                if firstStim_sliderD2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif firstStim_sliderD2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent first_mouseD2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'D':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'D':
            continueRoutine = False

        first_mouseD2.setPos([0,0])
  Routine secondStim_D2
    ImageComponent second_surpStimuliD2
      image [set every repeat] = $surpriseFaces
      size = (0.4551466688, 0.32)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent sStimD2
      letterHeight [set every repeat] = 0.045
      pos [set every repeat] = (0, -0.26)
      startVal [time (s)] = 0.0
      text [set every repeat] = Old or New?
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    CodeComponent stimulus_trig_code_17
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if second_surpStimuliD2.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    SliderComponent secondStim_sliderD2
      forceEndRoutine = True
      granularity = 1
      labels = ["Definitely old", "Probably old", "Maybe old", "Maybe new", "Probably new", "Definitely new"]  
      letterHeight = 0.022
      pos = (0, -0.35)
      size = (1.3, 0.022)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = [1, 2, 3, 4, 5, 6]
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    CodeComponent response_trigger_code_17
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if secondStim_sliderD2.response and len(secondStim_sliderD2.response) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(secondStim_sliderD2.response[-1]) #add this response to list of keys pressed this trial
            if len(secondStim_sliderD2.response) < 2: #if this is  the first response
                if secondStim_sliderD2.response[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD2.response[-1] == '2':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD2.response[-1] == '3':
                    port.write([0x2B])# 43
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD2.response[-1] == '4':
                    port.write([0x2C])# 44
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD2.response[-1] == '5':
                    port.write([0x2D])# 45
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif secondStim_sliderD2.response[-1] == '6':
                    port.write([0x2E])# 46
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
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    MouseComponent sec_mouseD2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['cb'] == 'D':
            if surprise_block_loop.thisN == 0 :
                continueRoutine = False
            elif surprise_block_loop.thisN == 1:
                continueRoutine = True
        elif expInfo['cb'] != 'D':
            continueRoutine = False

        sec_mouseD2.setPos([0,0])
Flow
  Routine JS_code
  Routine setup
  Routine welcome
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  LoopInitiator prac_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect_practice.csv
    loopType = random
    nReps = 0
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    Routine prac_blockReminders
    Routine initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  LoopInitiator task_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect.csv
    loopType = random
    nReps = 0
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    Routine task_blockReminders
    Routine initFixation
    LoopInitiator task_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine task_stimRoutine
    LoopTerminator task_trial_loop
    Routine task_blockFeed
  LoopTerminator task_block_loop
  Routine fixation1
  Routine errorNumbers_2
  Routine botherRate
  Routine surpriseInstruct
  LoopInitiator surprise_block_loop loopType="TrialHandler"
    conditionsFile = $"surpriseBlock_select_"+expInfo['cb']+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine instructSurpriseTask2_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichSurpriseBlock
      loopType = random
      nReps = 1
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      LoopInitiator trials_2 loopType="TrialHandler"
        conditionsFile = $surp_csv_name
        loopType = random
        nReps = 1
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        Routine firstStim_A1
        Routine secondStim_A1
        Routine firstStim_A2
        Routine secondStim_A2
        Routine firstStim_B1
        Routine secondStim_B1
        Routine firstStim_B2
        Routine secondStimB2
        Routine firstStim_C1
        Routine secondStim_C1
        Routine firstStim_C2
        Routine secondStim_C2
        Routine firstStim_D1
        Routine secondStim_D1
        Routine firstStim_D2
        Routine secondStim_D2
        Routine fixation2
      LoopTerminator trials_2
    LoopTerminator trials
  LoopTerminator surprise_block_loop
  Routine finishMessage
